load_file("nrngui.hoc")
load_file("CA1_Harvey_Svoboda_Stim.hoc")
//Evenements pré-synaptiques tests on 3 differents spine 30 inputs 0.5 Hz
objref stim_1 , stim_2 , stim_3 
	stim_1 = new NetStim(.5)
	stim_1.interval = 2
	stim_1.number = 30
	stim_1.start 	= 1000
	stim_1.noise 	= 0
	
	
	stim_2 = new NetStim(.5)
	stim_2.interval = 2
	stim_2.number = 30
	stim_2.start 	= 2000
	stim_2.noise 	= 0
	
	stim_3 = new NetStim(.5)
	stim_3.interval = 2
	stim_3.number = 30
	stim_3.start 	= 3000
	stim_3.noise 	= 0

	
	/**********Definitions des synapses************/
objref sNMDA[24],sAMPA[24],sNMDA_CA[3]

//apical
for i=0,8{
	access apical[i]{
	//NMDA_SYNAPSES
		sNMDA[i] = new nmda(0.5)
	//	sNMDA[i].Area = area(0.5) //cm2
    //AMPA_SYNAPSES	
    	sAMPA[i] = new ampa(0.5)	
		}
	}

//lateral	
for i=9,20{
	access lateral[i-9]{
	//NMDA_SYNAPSES
		sNMDA[i] = new nmda(0.5)
	//	sNMDA[i].Area = area(0.5) //cm2
    //AMPA_SYNAPSES	
    	sAMPA[i] = new ampa(0.5)
		}
	}
	
//spine 1,3 et 5

for i=21,21{ 
	access spine[i-20]{
	//NMDA_SYNAPSES
		sNMDA[i] = new nmda(0.5)
	//	sNMDA[i].Area = area(0.5) //cm2
    //AMPA_SYNAPSES	
    	sAMPA[i] = new ampa(0.5)	
    //NMDA_CA_SYNAPSES	
		sNMDA_CA[0] = new nmda_ca(0.5)
	//	sNMDA_CA[0].Area = area(0.5)//cm2 à cause du facteur spéciale A ESSAYER!!!!
		}
	}

for i=22,22{ 
	access spine[i-19]{
	//NMDA_SYNAPSES
		sNMDA[i] = new nmda(0.5)
	//	sNMDA[i].Area = area(0.5) //cm2
    //AMPA_SYNAPSES	
    	sAMPA[i] = new ampa(0.5)
    //NMDA_CA_SYNAPSES	
		sNMDA_CA[1] = new nmda_ca(0.5)
	//	sNMDA_CA[1].Area = area(0.5)//cm2 à cause du facteur spéciale A ESSAYER!!!!
		}
	}
	
for i=23,23{ 
	access spine[i-18]{
	//NMDA_SYNAPSES
		sNMDA[i] = new nmda(0.5)
	//	sNMDA[i].Area = area(0.5) //cm2
    //AMPA_SYNAPSES	
    	sAMPA[i] = new ampa(0.5)
    //NMDA_CA_SYNAPSES	
		sNMDA_CA[2] = new nmda_ca(0.5)
	//	sNMDA_CA[2].Area = area(0.5) //cm2 à cause du facteur spéciale A ESSAYER!!!!
		}
	}
	

	access soma
	run()
	

